/* ***************  BW invert tool ***************

 * This tool inverts the lightness of the image, conserving color hues and saturation.
 * It was created for inverting black or white background images for presentations.	
 * 
 * Right click on the icon to configure additional gamma compression. 	
 * 	
 */

var useGamma = true;
var gammaValue = 0.45;
macro "B/W invert Action Tool - R00ff F808f Cfff F117e Cf80 O33aa O4488" {
	title=getTitle();
	setBatchMode(true);
	run("Duplicate...", " ");
	run("Invert");
	run("HSB Stack");
	setThreshold(0, 127);
	run("Create Selection");
	resetThreshold();
if (selectionType>-1) {
	run("Add...", "value=128 slice");
	}
	run("Make Inverse");
	if (selectionType>-1){
 	   run("Subtract...", "value=128 slice");
	}
	run("Select None");
	run("RGB Color");
	if (useGamma) run("Gamma...", "value=&gammaValue");
	setBatchMode(false);
	rename("BW inverted - "+title);
	}

macro "B/W invert Action Tool Options"{
	Dialog.create("BW inverter tool options");
	Dialog.addCheckbox("Add gamma compression", useGamma);
	Dialog.addNumber("gamma value:", gammaValue, 2, 4, "");
	Dialog.show();
	
	useGamma = Dialog.getCheckbox();
	gammaValue = Dialog.getNumber();
	}
